<CompuCell3D Revision="2" Version="4.5.0">
   
<Metadata>
  <!-- Basic properties simulation -->
  <NumberOfProcessors>1</NumberOfProcessors>
  <DebugOutputFrequency>10</DebugOutputFrequency>
  <!-- <NonParallelModule Name="Potts"/> -->
</Metadata>

<Potts>  
  <!-- Basic properties of CPM (GGH) algorithm -->
  <Dimensions x="256" y="256" z="1"/>
  <Steps>100000</Steps>
  <Temperature>10.0</Temperature>
  <NeighborOrder>1</NeighborOrder>
</Potts>

<Plugin Name="CellType">
  <!-- Listing all cell types in the simulation --> 
  <CellType TypeId="0" TypeName="Medium"/>
  <CellType TypeId="1" TypeName="TypeA"/>
</Plugin>


<Plugin Name="CenterOfMass">
  <!-- Module tracking center of mass of each cell -->
</Plugin>

<Plugin Name="NeighborTracker">
  <!-- Module tracking neighboring cells of each cell -->
</Plugin>


<Plugin Name="AdhesionFlex">
   <!-- Specification of adhesion energies as a function of cadherin concentration at cell membranes -->
   <!-- Adhesion energy is a function of two cells in ocntact. the functional form is specified by the user -->
   <AdhesionMolecule Molecule="YourMoleculeName"/>
   <AdhesionMoleculeDensity CellType="Medium" Density="1.1" Molecule="YourMoleculeName"/>
   <AdhesionMoleculeDensity CellType="TypeA" Density="1.1" Molecule="YourMoleculeName"/>
   <BindingFormula Name="Binary">
      <Formula>min(Molecule1,Molecule2)</Formula>
      <Variables>
         <AdhesionInteractionMatrix>
            <BindingParameter Molecule1="YourMoleculeName" Molecule2="YourMoleculeName">0.5</BindingParameter>
         </AdhesionInteractionMatrix>
      </Variables>
   </BindingFormula>
   <NeighborOrder>4</NeighborOrder>
</Plugin>

<Plugin Name="BoundaryPixelTracker">
   <!-- Module tracking boundary pixels of each cell -->
   <NeighborOrder>1</NeighborOrder>
</Plugin>
    
<Plugin Name="CellTypeMonitor">
    <!-- Module tracking cell types at each lattice site - used mainly by pde solvers -->
</Plugin>

<Plugin Name="Chemotaxis">
   <!-- You may repeat ChemicalField element for each chemical field declared in the PDE solvers -->
   <!-- Specification of chemotaxis properties of select cell types. -->
   <ChemicalField Name="FIELD_FROM_PDE_SOLVER">
      <ChemotaxisByType ChemotactTowards="CELL_TYPES" Lambda="1.0" Type="CHEMOTAXING_TYPE"/>
      <ChemotaxisByType ChemotactTowards="CELL_TYPES" Lambda="1.0" SaturationCoef="100.0" Type="CHEMOTAXING_TYPE"/>
      <ChemotaxisByType ChemotactTowards="CELL_TYPES" Lambda="1.0" SaturationLinearCoef="10.1" Type="CHEMOTAXING_TYPE"/>
   </ChemicalField>
</Plugin>



   
<Plugin Name="Connectivity">
   <!-- Connectivity constraint applied to each cell. Energy penalty specifies how strong the constraint is. Penalty is specified globally for each cell  -->
   <!-- This constraint works in 2D and on square lattice only! It also requires that the <NeighborOrder> in the Potts section is 1 or 2! -->
   <!-- For more flexible version of this plugin use ConnectivityLocalFlex where constraint penalty is specified for each cell individually using Python scripting using the following syntax -->
   <!-- self.connectivityLocalFlexPlugin.setConnectivityStrength(cell,10000000) -->
   <Penalty>10000000</Penalty>
</Plugin>

   
<Plugin Name="ConnectivityGlobal">
   <!-- Connectivity constraint applied to each cell. Energy penalty specifies how strong the constraint is. Penalty is specified for each type  -->
   <!-- This constraint works in 2D and 3D on all type of lattices. It might be slowdown your simulation. For faster option - 2D and square lattice you may use Connectivity or ConnectivityLocalFlex -->
   <!-- To speed up simulation comment out unnecessary constraints for types which don't need the constraint -->
   <!-- By default we will always precheck connectivity BUT in simulations in which there is no risk of having unfragmented cell one can add this flag to speed up computations -->
   <!-- To turn off precheck uncomment line below -->
   <!-- <DoNotPrecheckConnectivity/> -->
   <Penalty Type="TypeA">1000000</Penalty>
</Plugin>

<Plugin Name="Contact">
   <!-- Specification of adhesion energies -->
   <Energy Type1="Medium" Type2="Medium">10.0</Energy>
   <Energy Type1="Medium" Type2="TypeA">10.0</Energy>
   <Energy Type1="TypeA" Type2="TypeA">10.0</Energy>
   <NeighborOrder>1</NeighborOrder>
</Plugin>

<Plugin Name="ContactCompartment">
   <!-- Specification of adhesion energies in the presence of compartmental cells -->
   <!-- This plugin is deprecated - please consider using Contact and ContactInternal plugins instead -->
   <!-- to specify adhesions bewtween members of same cluster -->
   <Energy Type1="Medium" Type2="Medium">10.0</Energy>
   <Energy Type1="Medium" Type2="TypeA">10.0</Energy>
   <Energy Type1="TypeA" Type2="TypeA">10.0</Energy>
   <InternalEnergy Type1="Medium" Type2="Medium">5.0</InternalEnergy>
   <InternalEnergy Type1="Medium" Type2="TypeA">5.0</InternalEnergy>
   <InternalEnergy Type1="TypeA" Type2="TypeA">5.0</InternalEnergy>
   <NeighborOrder>1</NeighborOrder>
</Plugin>

<Plugin Name="ContactInternal">
   <!-- Specification of internal adhesion energies -->
   <Energy Type1="Medium" Type2="Medium">10.0</Energy>
   <Energy Type1="Medium" Type2="TypeA">10.0</Energy>
   <Energy Type1="TypeA" Type2="TypeA">10.0</Energy>
   <NeighborOrder>1</NeighborOrder>
</Plugin>

<Plugin Name="ContactLocalProduct">
   <!-- Specification of adhesion energies as a function of cadherin concentration at cell membranes -->
   <!-- Adhesion energy is a function of two cells in ocntact. the functional form is specified by the user -->
   <!-- Please consider using more flexible version of this plugin - AdhesionFlex -->
   <ContactSpecificity Type1="Medium" Type2="Medium">-1.0</ContactSpecificity>
   <ContactSpecificity Type1="Medium" Type2="TypeA">-1.0</ContactSpecificity>
   <ContactSpecificity Type1="TypeA" Type2="TypeA">-1.0</ContactSpecificity>
   <ContactFunctionType>linear</ContactFunctionType>
   <EnergyOffset>0.0</EnergyOffset>
   <NeighborOrder>1</NeighborOrder>
</Plugin>

<Plugin Name="Elasticity">
   <!-- This plugin calculates elastic constraints between cells Center of Mass -->
   <!-- To enable specification of elastic links individually for each link uncomment line below  -->
   <!-- <Local/> -->
   <!-- See CC3D manual for details -->
   <LambdaElasticity>200</LambdaElasticity>
   <TargetLengthElasticity>6</TargetLengthElasticity>
</Plugin>

<Plugin Name="ElasticityTracker">
   <!-- Elastic constraints between Center of mass of cells. Need to be accompanied by ElasticityTracker plugin to work. Only cells in contact at MCS=0 will be affected by the constraint -->
   <!-- ElasticityTracker keeps track of cell neighbors which are participating in the elasticity constraint calculations -->
   <!-- Comment out cell types which should be unaffected by the constraint -->
   <IncludeType>TypeA</IncludeType>
</Plugin>

<Plugin Name="ExternalPotential">
   <!-- External force applied to cell. Each cell type has different force. -->
   <!-- For more flexible specification of the constraint (done in Python) please use ExternalPotential plugin without specifying per-type parameters -->
   <!-- Algorithm options are: PixelBased, CenterOfMassBased -->
   <Algorithm>PixelBased</Algorithm>
   <ExternalPotentialParameters CellType="TypeA" x="-0.5" y="0.0" z="0.0"/>
</Plugin>

<Plugin Name="FocalPointPlasticity">
   <!-- Specification of focal point junctions -->
   <!-- We separetely specify links between members of same cluster - InternalParameters and members of different clusters Parameters. When not using compartmental  cells comment out InternalParameters specification -->
   <!-- To modify FPP links individually for each cell pair uncomment line below -->
   <!-- <Local/> -->
   <!-- Note that even though you may manipulate lambdaDistance, targetDistance and maxDistance using Python you still need to set activation energy from XML level -->
   <!-- See CC3D manual for details on FPP plugin  -->
   <Parameters Type1="Medium" Type2="Medium">
      <Lambda>10</Lambda>
      <ActivationEnergy>-50</ActivationEnergy>
      <TargetDistance>7</TargetDistance>
      <MaxDistance>20</MaxDistance>
      <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions>
   </Parameters>
   <Parameters Type1="Medium" Type2="TypeA">
      <Lambda>10</Lambda>
      <ActivationEnergy>-50</ActivationEnergy>
      <TargetDistance>7</TargetDistance>
      <MaxDistance>20</MaxDistance>
      <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions>
   </Parameters>
   <Parameters Type1="TypeA" Type2="TypeA">
      <Lambda>10</Lambda>
      <ActivationEnergy>-50</ActivationEnergy>
      <TargetDistance>7</TargetDistance>
      <MaxDistance>20</MaxDistance>
      <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions>
   </Parameters>
   <InternalParameters Type1="Medium" Type2="Medium">
      <Lambda>10</Lambda>
      <ActivationEnergy>-50</ActivationEnergy>
      <TargetDistance>7</TargetDistance>
      <MaxDistance>20</MaxDistance>
      <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions>
   </InternalParameters>
   <InternalParameters Type1="Medium" Type2="TypeA">
      <Lambda>10</Lambda>
      <ActivationEnergy>-50</ActivationEnergy>
      <TargetDistance>7</TargetDistance>
      <MaxDistance>20</MaxDistance>
      <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions>
   </InternalParameters>
   <InternalParameters Type1="TypeA" Type2="TypeA">
      <Lambda>10</Lambda>
      <ActivationEnergy>-50</ActivationEnergy>
      <TargetDistance>7</TargetDistance>
      <MaxDistance>20</MaxDistance>
      <MaxNumberOfJunctions NeighborOrder="1">1</MaxNumberOfJunctions>
   </InternalParameters>
   <NeighborOrder>1</NeighborOrder>
</Plugin>

<Plugin Name="ImplicitMotility">
   <Motility Type="Medium">10.0</Motility>
   <Motility Type="TypeA">10.0</Motility>
</Plugin>

<Plugin Name="LengthConstraint">
   <!-- Applies elongation constraint to each cell. Users specify target length of major axis -TargetLength (in 3D additionally, target length of minor axis - MinorTargetLength) and a strength of the constraint -LambdaLength. Parameters are specified for each cell type -->
   <!-- IMPORTANT: To prevent cell fragmentation for large elongations you need to also use connectivity constraint -->
   <!-- LengthConstraint plugin with no body: <Plugin Name="LengthConstraint"/> permits constraint specification for individual cells -->
   <!-- Comment out the constrains for cell types which don't need them -->
   <LengthEnergyParameters CellType="TypeA" LambdaLength="2.0" TargetLength="25"/>
</Plugin>

<Plugin Name="PixelTracker">
   <!-- Module tracking pixels of each cell -->
</Plugin>

<Plugin Name="Secretion">
   <!-- Specification of secretion properties of select cell types. -->
   <!-- You may repeat Field element for each chemical field declared in the PDE solvers -->
   <!-- Specification of secretion properties of individual cells can be done in Python -->
   <Field Name="FIELD_FROM_PDE_SOLVER">
      <Secretion Type="CELL_TYPE_NAME">0.1</Secretion>
      <SecretionOnContact SecreteOnContactWith="COMMA_SEPARATED_TYPE_NAMES" Type="CELL_TYPE_NAME">1.1</SecretionOnContact>
      <ConstantConcentration Type="CELL_TYPE_NAME">0.5</ConstantConcentration>
   </Field>
</Plugin>

<Plugin Name="Surface">
   <SurfaceEnergyParameters CellType="TypeA" LambdaSurface="2.0" TargetSurface="50"/>
</Plugin>

<Plugin Name="Volume">
   <VolumeEnergyParameters CellType="TypeA" LambdaVolume="2.0" TargetVolume="50"/>
</Plugin>

<Steppable Type="BlobInitializer">
   <!-- Initial layout of cells in the form of spherical (circular in 2D) blob -->
   <Region>
      <Center x="128" y="128" z="0"/>
      <Radius>51</Radius>
      <Gap>0</Gap>
      <Width>7</Width>
      <Types>TypeA</Types>
   </Region>
</Steppable>

<Steppable Type="BoxWatcher">
   <!-- Module tracing boundaries of the minimal box enclosing all the cells. May speed up calculations. May have no effect for parallel version -->
   <XMargin>7</XMargin>
   <YMargin>7</YMargin>
   <ZMargin>7</ZMargin>
</Steppable>

<Steppable Type="DiffusionSolverFE">
   <!-- Specification of PDE solvers -->
   <DiffusionField Name="FIELD_NAME_1">
      <DiffusionData>
         <FieldName>FIELD_NAME_1</FieldName>
         <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
         <GlobalDecayConstant>1e-05</GlobalDecayConstant>
         <!-- Additional options are: -->
         <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
         <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
         <DiffusionCoefficient CellType="TypeA">0.1</DiffusionCoefficient>
         <DecayCoefficient CellType="TypeA">0.0001</DecayCoefficient>
      </DiffusionData>
      <SecretionData>
         <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
         <!-- Uniform secretion Definition -->
         <Secretion Type="TypeA">0.1</Secretion>
         <!-- <SecretionOnContact SecreteOnContactWith="TypeA" Type="TypeA">0.2</SecretionOnContact> -->
         <!-- <ConstantConcentration Type="TypeA">0.1</ConstantConcentration> -->
      </SecretionData>
      <BoundaryConditions>
         <Plane Axis="X">
            <ConstantValue PlanePosition="Min" Value="10.0"/>
            <ConstantValue PlanePosition="Max" Value="5.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
         </Plane>
         <Plane Axis="Y">
            <ConstantDerivative PlanePosition="Min" Value="10.0"/>
            <ConstantDerivative PlanePosition="Max" Value="5.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
         </Plane>
      </BoundaryConditions>
   </DiffusionField>
   <DiffusionField Name="FIELD_NAME_2">
      <DiffusionData>
         <FieldName>FIELD_NAME_2</FieldName>
         <GlobalDiffusionConstant>0.1</GlobalDiffusionConstant>
         <GlobalDecayConstant>1e-05</GlobalDecayConstant>
         <!-- Additional options are: -->
         <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
         <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
         <DiffusionCoefficient CellType="TypeA">0.1</DiffusionCoefficient>
         <DecayCoefficient CellType="TypeA">0.0001</DecayCoefficient>
      </DiffusionData>
      <SecretionData>
         <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
         <!-- Uniform secretion Definition -->
         <Secretion Type="TypeA">0.1</Secretion>
         <!-- <SecretionOnContact SecreteOnContactWith="TypeA" Type="TypeA">0.2</SecretionOnContact> -->
         <!-- <ConstantConcentration Type="TypeA">0.1</ConstantConcentration> -->
      </SecretionData>
      <BoundaryConditions>
         <Plane Axis="X">
            <ConstantValue PlanePosition="Min" Value="10.0"/>
            <ConstantValue PlanePosition="Max" Value="5.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
         </Plane>
         <Plane Axis="Y">
            <ConstantDerivative PlanePosition="Min" Value="10.0"/>
            <ConstantDerivative PlanePosition="Max" Value="5.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
         </Plane>
      </BoundaryConditions>
   </DiffusionField>
</Steppable>

<Steppable Type="FastDiffusionSolver2DFE">
   <!-- Specification of PDE solvers -->
   <DiffusionField Name="FIELD_NAME_1">
      <DiffusionData>
         <FieldName>FIELD_NAME_1</FieldName>
         <DiffusionConstant>0.1</DiffusionConstant>
         <DecayConstant>1e-05</DecayConstant>
         <!-- Additional options are: -->
         <!-- <DoNotDiffuseTo>LIST YOUR CELL TYPES HERE</DoNotDiffuseTo> -->
         <!-- <DoNotDecayIn>LIST YOUR CELL TYPES HERE</DoNotDecayIn> -->
         <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
         <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
         <!-- To run solver for large diffusion constants you typically call solver multiple times - ExtraTimesPerMCS to specify additional calls to the solver in each MCS  -->
         <!-- IMPORTANT: make sure not to mix this setting with the PDESolverCaller module! See manual for more information -->
         <!-- <ExtraTimesPerMCS>0</ExtraTimesPerMCS> -->
         <!-- <DeltaX>1.0</DeltaX> -->
         <!-- <DeltaT>1.0</DeltaT> -->
      </DiffusionData>
      <BoundaryConditions>
         <Plane Axis="X">
            <ConstantValue PlanePosition="Min" Value="10.0"/>
            <ConstantValue PlanePosition="Max" Value="5.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
         </Plane>
         <Plane Axis="Y">
            <ConstantDerivative PlanePosition="Min" Value="10.0"/>
            <ConstantDerivative PlanePosition="Max" Value="5.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
         </Plane>
      </BoundaryConditions>
   </DiffusionField>
   <DiffusionField Name="FIELD_NAME_2">
      <DiffusionData>
         <FieldName>FIELD_NAME_2</FieldName>
         <DiffusionConstant>0.1</DiffusionConstant>
         <DecayConstant>1e-05</DecayConstant>
         <!-- Additional options are: -->
         <!-- <DoNotDiffuseTo>LIST YOUR CELL TYPES HERE</DoNotDiffuseTo> -->
         <!-- <DoNotDecayIn>LIST YOUR CELL TYPES HERE</DoNotDecayIn> -->
         <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
         <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
         <!-- To run solver for large diffusion constants you typically call solver multiple times - ExtraTimesPerMCS to specify additional calls to the solver in each MCS  -->
         <!-- IMPORTANT: make sure not to mix this setting with the PDESolverCaller module! See manual for more information -->
         <!-- <ExtraTimesPerMCS>0</ExtraTimesPerMCS> -->
         <!-- <DeltaX>1.0</DeltaX> -->
         <!-- <DeltaT>1.0</DeltaT> -->
      </DiffusionData>
      <BoundaryConditions>
         <Plane Axis="X">
            <ConstantValue PlanePosition="Min" Value="10.0"/>
            <ConstantValue PlanePosition="Max" Value="5.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
         </Plane>
         <Plane Axis="Y">
            <ConstantDerivative PlanePosition="Min" Value="10.0"/>
            <ConstantDerivative PlanePosition="Max" Value="5.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
         </Plane>
      </BoundaryConditions>
   </DiffusionField>
</Steppable>

<Steppable Type="FlexibleDiffusionSolverFE">
   <!-- Specification of PDE solvers -->
   <DiffusionField Name="FIELD_NAME_1">
      <DiffusionData>
         <FieldName>FIELD_NAME_1</FieldName>
         <DiffusionConstant>0.1</DiffusionConstant>
         <DecayConstant>1e-05</DecayConstant>
         <!-- Additional options are: -->
         <!-- <DoNotDiffuseTo>LIST YOUR CELL TYPES HERE</DoNotDiffuseTo> -->
         <!-- <DoNotDecayIn>LIST YOUR CELL TYPES HERE</DoNotDecayIn> -->
         <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
         <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
         <!-- To run solver for large diffusion constants you typically call solver multiple times - ExtraTimesPerMCS to specify additional calls to the solver in each MCS  -->
         <!-- IMPORTANT: make sure not to mix this setting with the PDESolverCaller module! See manual for more information -->
         <!-- <ExtraTimesPerMCS>0</ExtraTimesPerMCS> -->
         <!-- <DeltaX>1.0</DeltaX> -->
         <!-- <DeltaT>1.0</DeltaT> -->
      </DiffusionData>
      <BoundaryConditions>
         <Plane Axis="X">
            <ConstantValue PlanePosition="Min" Value="10.0"/>
            <ConstantValue PlanePosition="Max" Value="5.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
         </Plane>
         <Plane Axis="Y">
            <ConstantDerivative PlanePosition="Min" Value="10.0"/>
            <ConstantDerivative PlanePosition="Max" Value="5.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
         </Plane>
      </BoundaryConditions>
   </DiffusionField>
   <DiffusionField Name="FIELD_NAME_2">
      <DiffusionData>
         <FieldName>FIELD_NAME_2</FieldName>
         <DiffusionConstant>0.1</DiffusionConstant>
         <DecayConstant>1e-05</DecayConstant>
         <!-- Additional options are: -->
         <!-- <DoNotDiffuseTo>LIST YOUR CELL TYPES HERE</DoNotDiffuseTo> -->
         <!-- <DoNotDecayIn>LIST YOUR CELL TYPES HERE</DoNotDecayIn> -->
         <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
         <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
         <!-- To run solver for large diffusion constants you typically call solver multiple times - ExtraTimesPerMCS to specify additional calls to the solver in each MCS  -->
         <!-- IMPORTANT: make sure not to mix this setting with the PDESolverCaller module! See manual for more information -->
         <!-- <ExtraTimesPerMCS>0</ExtraTimesPerMCS> -->
         <!-- <DeltaX>1.0</DeltaX> -->
         <!-- <DeltaT>1.0</DeltaT> -->
      </DiffusionData>
      <BoundaryConditions>
         <Plane Axis="X">
            <ConstantValue PlanePosition="Min" Value="10.0"/>
            <ConstantValue PlanePosition="Max" Value="5.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
         </Plane>
         <Plane Axis="Y">
            <ConstantDerivative PlanePosition="Min" Value="10.0"/>
            <ConstantDerivative PlanePosition="Max" Value="5.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
         </Plane>
      </BoundaryConditions>
   </DiffusionField>
</Steppable>

<Steppable Type="KernelDiffusionSolver">
   <!-- Specification of PDE solvers -->
   <DiffusionField Name="FIELD_NAME_1">
      <Kernel>4</Kernel>
      <DiffusionData>
         <FieldName>FIELD_NAME_1</FieldName>
         <DiffusionConstant>0.1</DiffusionConstant>
         <DecayConstant>1e-05</DecayConstant>
         <!-- Additional options are: -->
         <!-- <DoNotDiffuseTo>LIST YOUR CELL TYPES HERE</DoNotDiffuseTo> -->
         <!-- <DoNotDecayIn>LIST YOUR CELL TYPES HERE</DoNotDecayIn> -->
         <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
         <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
         <DeltaX>1.0</DeltaX>
         <DeltaT>1.0</DeltaT>
      </DiffusionData>
   </DiffusionField>
   <DiffusionField Name="FIELD_NAME_2">
      <Kernel>4</Kernel>
      <DiffusionData>
         <FieldName>FIELD_NAME_2</FieldName>
         <DiffusionConstant>0.1</DiffusionConstant>
         <DecayConstant>1e-05</DecayConstant>
         <!-- Additional options are: -->
         <!-- <DoNotDiffuseTo>LIST YOUR CELL TYPES HERE</DoNotDiffuseTo> -->
         <!-- <DoNotDecayIn>LIST YOUR CELL TYPES HERE</DoNotDecayIn> -->
         <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
         <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
         <DeltaX>1.0</DeltaX>
         <DeltaT>1.0</DeltaT>
      </DiffusionData>
   </DiffusionField>
</Steppable>

<Steppable Type="PIFDumper" Frequency="100" >
   <!-- Periodically stores cell layout configuration in a piff format -->
   <PIFName>PLEASE_PUT_SIMULATION_FILE_NAME_HERE</PIFName>
   <PIFFileExtension>piff</PIFFileExtension>
</Steppable>

<Steppable Type="ReactionDiffusionSolverFVM">
   <!-- Specification of PDE solvers -->
   <DiffusionField Name="FIELD_NAME_1">
      <!-- Discretization length along X -->
      <!-- <DeltaX>1.0</DeltaX> -->
      <!-- Discretization length along Y -->
      <!-- <DeltaY>1.0</DeltaY> -->
      <!-- Discretization length along Z -->
      <!-- <DeltaZ>1.0</DeltaZ> -->
      <!-- Optional automatic time sub-stepping. Safe, but conservative. -->
      <!-- <AutoTimeSubStep/> -->
      <DiffusionData>
         <FieldName>FIELD_NAME_1</FieldName>
         <DiffusionConstant>0.1</DiffusionConstant>
         <DecayConstant>1e-05</DecayConstant>
         <!-- Additional options are: -->
         <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
         <DiffusionCoefficient CellType="TypeA">0.1</DiffusionCoefficient>
         <DecayCoefficient CellType="TypeA">0.0001</DecayCoefficient>
         <!-- Enables diffusion by cell type: -->
         <DiffusivityByType/>
         <!-- Enables diffusion in the medium according to a settable diffusivity field -->
         <!-- <DiffusivityFieldInMedium/> -->
         <!-- Enables diffusion everywhere according to a settable diffusivity field -->
         <!-- <DiffusivityFieldEverywhere/> -->
         <!-- Simple permeable interface coefficient -->
         <!-- <PermIntCoefficient Type1="TypeA" Type2="TypeA">0.01</PermIntCoefficient> -->
         <!-- Simple permeable interface bias -->
         <!-- <PermIntBias Type1="TypeA" Type2="TypeA">0.001</PermIntBias> -->
         <!-- Enables simple permeable interface modeling everywhere -->
         <!-- <SimplePermInt/> -->
      </DiffusionData>
      <SecretionData>
         <!-- Uniform secretion Definition -->
         <Secretion Type="TypeA">0.1</Secretion>
         <!-- <SecretionOnContact SecreteOnContactWith="TypeA" Type="TypeA">0.2</SecretionOnContact> -->
         <!-- <ConstantConcentration Type="TypeA">0.1</ConstantConcentration> -->
      </SecretionData>
      <ReactionData>
         <!-- Gives this field a symbol for usage in any expression for any field of this solver -->
         <ExpressionSymbol>FIELD_NAME_1</ExpressionSymbol>
         <!-- Rate proportional to local concentration -->
         <ExpressionMult>x</ExpressionMult>
         <!-- Rate independent of local concentration -->
         <ExpressionIndep>y</ExpressionIndep>
      </ReactionData>
      <BoundaryConditions>
         <Plane Axis="X">
            <ConstantValue PlanePosition="Min" Value="10.0"/>
            <ConstantValue PlanePosition="Max" Value="5.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
         </Plane>
         <Plane Axis="Y">
            <ConstantDerivative PlanePosition="Min" Value="10.0"/>
            <ConstantDerivative PlanePosition="Max" Value="5.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
         </Plane>
      </BoundaryConditions>
   </DiffusionField>
   <DiffusionField Name="FIELD_NAME_2">
      <!-- Discretization length along X -->
      <!-- <DeltaX>1.0</DeltaX> -->
      <!-- Discretization length along Y -->
      <!-- <DeltaY>1.0</DeltaY> -->
      <!-- Discretization length along Z -->
      <!-- <DeltaZ>1.0</DeltaZ> -->
      <!-- Optional automatic time sub-stepping. Safe, but conservative. -->
      <!-- <AutoTimeSubStep/> -->
      <DiffusionData>
         <FieldName>FIELD_NAME_2</FieldName>
         <DiffusionConstant>0.1</DiffusionConstant>
         <DecayConstant>1e-05</DecayConstant>
         <!-- Additional options are: -->
         <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
         <DiffusionCoefficient CellType="TypeA">0.1</DiffusionCoefficient>
         <DecayCoefficient CellType="TypeA">0.0001</DecayCoefficient>
         <!-- Enables diffusion by cell type: -->
         <DiffusivityByType/>
         <!-- Enables diffusion in the medium according to a settable diffusivity field -->
         <!-- <DiffusivityFieldInMedium/> -->
         <!-- Enables diffusion everywhere according to a settable diffusivity field -->
         <!-- <DiffusivityFieldEverywhere/> -->
         <!-- Simple permeable interface coefficient -->
         <!-- <PermIntCoefficient Type1="TypeA" Type2="TypeA">0.01</PermIntCoefficient> -->
         <!-- Simple permeable interface bias -->
         <!-- <PermIntBias Type1="TypeA" Type2="TypeA">0.001</PermIntBias> -->
         <!-- Enables simple permeable interface modeling everywhere -->
         <!-- <SimplePermInt/> -->
      </DiffusionData>
      <SecretionData>
         <!-- Uniform secretion Definition -->
         <Secretion Type="TypeA">0.1</Secretion>
         <!-- <SecretionOnContact SecreteOnContactWith="TypeA" Type="TypeA">0.2</SecretionOnContact> -->
         <!-- <ConstantConcentration Type="TypeA">0.1</ConstantConcentration> -->
      </SecretionData>
      <ReactionData>
         <!-- Gives this field a symbol for usage in any expression for any field of this solver -->
         <ExpressionSymbol>FIELD_NAME_2</ExpressionSymbol>
         <!-- Rate proportional to local concentration -->
         <ExpressionMult>x</ExpressionMult>
         <!-- Rate independent of local concentration -->
         <ExpressionIndep>y</ExpressionIndep>
      </ReactionData>
      <BoundaryConditions>
         <Plane Axis="X">
            <ConstantValue PlanePosition="Min" Value="10.0"/>
            <ConstantValue PlanePosition="Max" Value="5.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
         </Plane>
         <Plane Axis="Y">
            <ConstantDerivative PlanePosition="Min" Value="10.0"/>
            <ConstantDerivative PlanePosition="Max" Value="5.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
         </Plane>
      </BoundaryConditions>
   </DiffusionField>
</Steppable>

<Steppable Type="SteadyStateDiffusionSolver2D">
   <!-- Specification of PDE solvers -->
   <DiffusionField Name="FIELD_NAME_1">
      <DiffusionData>
         <FieldName>FIELD_NAME_1</FieldName>
         <DiffusionConstant>1.0</DiffusionConstant>
         <DecayConstant>1e-05</DecayConstant>
         <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
         <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
      </DiffusionData>
      <SecretionData>
         <!-- Secretion has to be defined inside SteadyStateDissufion solver - Secretion Plugin doe s not work with this solver. -->
         <!-- Uniform secretion Definition -->
         <Secretion Type="CELL TYPE 1">0.1</Secretion>
         <Secretion Type="CELL TYPE 2">0.2</Secretion>
      </SecretionData>
      <BoundaryConditions>
         <Plane Axis="X">
            <ConstantValue PlanePosition="Min" Value="10.0"/>
            <ConstantValue PlanePosition="Max" Value="5.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
         </Plane>
         <Plane Axis="Y">
            <ConstantDerivative PlanePosition="Min" Value="10.0"/>
            <ConstantDerivative PlanePosition="Max" Value="5.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
         </Plane>
      </BoundaryConditions>
   </DiffusionField>
   <DiffusionField Name="FIELD_NAME_2">
      <DiffusionData>
         <FieldName>FIELD_NAME_2</FieldName>
         <DiffusionConstant>1.0</DiffusionConstant>
         <DecayConstant>1e-05</DecayConstant>
         <!-- <InitialConcentrationExpression>x*y</InitialConcentrationExpression> -->
         <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
      </DiffusionData>
      <SecretionData>
         <!-- Secretion has to be defined inside SteadyStateDissufion solver - Secretion Plugin doe s not work with this solver. -->
         <!-- Uniform secretion Definition -->
         <Secretion Type="CELL TYPE 1">0.1</Secretion>
         <Secretion Type="CELL TYPE 2">0.2</Secretion>
      </SecretionData>
      <BoundaryConditions>
         <Plane Axis="X">
            <ConstantValue PlanePosition="Min" Value="10.0"/>
            <ConstantValue PlanePosition="Max" Value="5.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
         </Plane>
         <Plane Axis="Y">
            <ConstantDerivative PlanePosition="Min" Value="10.0"/>
            <ConstantDerivative PlanePosition="Max" Value="5.0"/>
            <!-- Other options are (examples): -->
            <!-- <Periodic/> -->
            <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
         </Plane>
      </BoundaryConditions>
   </DiffusionField>
</Steppable>

<Steppable Type="UniformInitializer">
   <!-- Initial layout of cells in the form of rectangular slab -->
   <Region>
      <BoxMin x="51" y="51" z="0"/>
      <BoxMax x="204" y="204" z="1"/>
      <Gap>0</Gap>
      <Width>7</Width>
      <Types>TypeA</Types>
   </Region>
</Steppable>


</CompuCell3D>
